PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = white
  expName = mn_generaltask_082823
  keyboardBackend = ioHub
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Routines
  Routine mng_probe
    SoundComponent sound_1
      sound = Look At These 2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P1
      image [set every repeat] = $probe_p1
      pos = (0.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P2
      image [set every repeat] = $probe_p3
      pos = (0.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P3
      pos = (0.625, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P4
      image [set every repeat] = $probe_p2
      pos = (-0.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P5
      image [set every repeat] = $probe_p4
      pos = (-0.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P6
      pos = (0.625, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine mng_welcome
    TextComponent text
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Welcome!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mng_test
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        ClickCount1 = 0
      Each Frame:
        #print(ClickCount1)
        if mouse.isPressedIn(P1T_rectangle) and P1T_rectangle.lineColor[0] == 1.0:
            P1T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if mouse.isPressedIn(P2T_rectangle) and P2T_rectangle.lineColor[0] == 1.0:
            P2T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if mouse.isPressedIn(P3T_rectangle) and P3T_rectangle.lineColor[0] == 1.0:
            P3T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if mouse.isPressedIn(P4T_rectangle) and P4T_rectangle.lineColor[0] == 1.0:
            P4T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if mouse.isPressedIn(P5T_rectangle) and P5T_rectangle.lineColor[0] == 1.0:
            P5T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if mouse.isPressedIn(P6T_rectangle) and P6T_rectangle.lineColor[0] == 1.0:
            P6T_rectangle.lineColor = 'black'
            ClickCount1 = ClickCount1 + 1
            #print(ClickCount1)

        if ClickCount1 == clicks:
            print(ClickCount1)
            continueRoutine = False
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle.lineColor = 'white'
        P2T_rectangle.lineColor = 'white'
        P3T_rectangle.lineColor = 'white'
        P4T_rectangle.lineColor = 'white'
        P5T_rectangle.lineColor = 'white'
        P6T_rectangle.lineColor = 'white'
    PolygonComponent P1T_rectangle
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle
      fillColor = white
      pos = (0.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle
      fillColor = white
      pos = (-0.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T
      image [set every repeat] = $test_p1
      pos = (0.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P3T
      image [set every repeat] = $test_p3
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T
      image [set every repeat] = $test_p5
      pos = (0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P2T
      image [set every repeat] = $test_p2
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T
      image [set every repeat] = $test_p4
      pos = (-0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T
      image [set every repeat] = $test_p6
      pos = (-0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = P1T_rectangle
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine mng_blank
    TextComponent blank_box
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine mng_welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mn_generaltask_4items_test.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('list', 1), ('item', 'item_07'), ('old_probe_p1', 'present'), ('old_probe_p2', 'tire'), ('old_test_p1', 'clover'), ('old_test_p2', 'present'), ('old_test_p3', 'fire_hydrant'), ('old_test_p4', 'tire'), ('probe_p1', 'colored PNG/PICTURE_90.png'), ('probe_p2', 'colored PNG/PICTURE_122.png'), ('test_p1', 'colored PNG/PICTURE_1.png'), ('test_p2', 'colored PNG/PICTURE_90.png'), ('test_p3', 'colored PNG/PICTURE_69.png'), ('test_p4', 'colored PNG/PICTURE_122.png'), ('clicks', 2), ('targets', '"[P1T, P2T]"')]),
      OrderedDict([('list', 2), ('item', 'item_08'), ('old_probe_p1', 'kite'), ('old_probe_p2', 'fire_hydrant'), ('old_test_p1', 'kite'), ('old_test_p2', 'duck'), ('old_test_p3', 'fire_hydrant'), ('old_test_p4', 'present'), ('probe_p1', 'colored PNG/PICTURE_75.png'), ('probe_p2', 'colored PNG/PICTURE_69.png'), ('test_p1', 'colored PNG/PICTURE_75.png'), ('test_p2', 'colored PNG/PICTURE_67.png'), ('test_p3', 'colored PNG/PICTURE_69.png'), ('test_p4', 'colored PNG/PICTURE_90.png'), ('clicks', 2), ('targets', '"[P1T, P2T]"')]),
      OrderedDict([('list', 3), ('item', 'item_09'), ('old_probe_p1', 'duck'), ('old_probe_p2', 'clover'), ('old_test_p1', 'kite'), ('old_test_p2', 'tire'), ('old_test_p3', 'clover'), ('old_test_p4', 'duck'), ('probe_p1', 'colored PNG/PICTURE_67.png'), ('probe_p2', 'colored PNG/PICTURE_1.png'), ('test_p1', 'colored PNG/PICTURE_75.png'), ('test_p2', 'colored PNG/PICTURE_122.png'), ('test_p3', 'colored PNG/PICTURE_1.png'), ('test_p4', 'colored PNG/PICTURE_67.png'), ('clicks', 2), ('targets', '"[P1T, P2T]"')])]
    Routine mng_blank
    Routine mng_probe
    Routine mng_test
  LoopTerminator trials
