PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Enter_Participant_ID'], expName, expInfo['date'])
  Experiment info = {'Enter_Participant_ID': '', 'Enter_Age': '', 'Enter_Site_ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  colorSpace = hex
  expName = manynumbers_visualmemory_020624
  keyboardBackend = PsychToolbox
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Routines
  Routine mng_welcome
    TextComponent text
      color = black
      letterHeight = 0.155
      startVal [time (s)] = 0.0
      text = Welcome!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mng_blank
    TextComponent blank_box
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_28
      Code Type = Auto->JS
  Routine mng_feedback_practice
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_sound = ['kids_cheering.wav','crowdohh.wav']
        #feedback_image = ['happy139.png','sad139.png']
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
    SoundComponent sound_23
      disabled = True
      sound [set every repeat] = $feedback_outcome_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_2
      image [set every repeat] = $feedback_outcome_image
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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
  Routine mng_end
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you!
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_42
      Code Type = Py
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      Before Experiment:
        beginning_exp = ''
        timer = ''
        timer_exp = ''
        beginning_exp = ''
        beginning_exp2 = ''

        from psychopy import monitors
        for mon in monitors.getAllMonitors():
            monsize = monitors.Monitor(mon).getSizePix()
            print(monitors.Monitor(mon).getSizePix()[1])
      Begin Experiment:
        globalClock = core.Clock()
        beginning_exp = globalClock.getTime()

        from psychopy import visual
        win_size = win.size

        thisExp.addData("monitor_size", monsize);
        thisExp.addData("window_size", win_size);
      Begin Routine:
        end_exp = globalClock.getTime();
        time_exp = (end_exp - beginning_exp)
        print(time_exp)
        thisExp.addData("totaltime_exp", time_exp);
  Routine mng_instructions
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        I am going to show you some pictures. Then, you will point to the pictures you just saw.

        Ready?
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mng_probe_1target
    SoundComponent sound_2
      disabled = True
      sound = Look At This.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P1_sample_2
      image [set every repeat] = $probe_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent code_43
      Code Type = Py
      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_probe_sample
    SoundComponent sound_1
      disabled = True
      sound = Look At This.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P1_sample
      image [set every repeat] = $probe_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent code_44
      Code Type = Py
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      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_test_sample
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()


        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
      Each Frame:
        #print(ClickCount1)
        if mouse.isPressedIn(P1T_rectangle):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse.isPressedIn(P2T_rectangle):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse.isPressedIn(finish):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);

        #print(mouse.time[0])
        #rtList.append(mouse.time[0])
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle.lineColor = 'white'
        P2T_rectangle.lineColor = 'white'

        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))
        print(type(float(P2T_rectangle_color)))
        print(type(float(corr_p2)))

        print("correct")
        print(corr_p2)
        print(corr_p3)
        print(type(corr_p2))
        print(type(corr_p3))
        print("choices")
        print(P1T_rectangle_color)
        print(P2T_rectangle_color)
        print(type(P1T_rectangle_color))
        print(type(P2T_rectangle_color))


        if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p1) == float(P1T_rectangle_color))):
            mng_practice.addData('accuracy', 1) #OR exp.addData('letter', letter)
            feedback_outcome_sound = feedback_sound[0]
            feedback_outcome_image = feedback_image[0]
            msg = "Correct"
            incorr = 0
        else:
            msg = "Incorrect"
            feedback_outcome_sound = feedback_sound[1]
            feedback_outcome_image = feedback_image[1]
            incorr = 1
            mng_practice.addData('accuracy', 0) #OR exp.addData('letter', letter)
            print("value incorr")
            print(incorr)

        #beginning_trial = globalClock.getTime();
        #end_trial = globalClock.getTime();
        #thisExp.addData("end", end_trial);
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        thisExp.addData("presented", 1)
    MouseComponent mouse
      clickable = P1T_rectangle, P2T_rectangle
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P1T
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      disabled = True
      sound = WhatPicture.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_practice_counter
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        ncount = 0
  Routine mng_repeat_instructions
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if ncount == 1:
            if nCorr2_loop1 == 100:
                continueRoutine=False

        if ncount == 2:
            if nCorr2_loop2 == 100:
                continueRoutine=False
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember!
        Point to the picture you just saw.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mng_check_practice
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        ncount = ncount + 1

        if ncount == 1:
            nCorr2_loop1 = int(mng_practice.data['accuracy'].mean()*100)
            print(nCorr2_loop1)
            if nCorr2_loop1 ==100:
                mng_practice_loop.finished=1

        if ncount == 2:
            nCorr2_loop2 = int(mng_practice.data['accuracy'].mean()*100)
            nCorr2_loop2 = nCorr2_loop2-nCorr2_loop1
            if nCorr2_loop2 == 100:
                mng_practice_loop.finished=1
  Routine mng_test_1target_2objects
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        meanb1 = 0
      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 2:
            continueRoutine=False

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        #P1T_rectangle_color_1t = 0
        P2T_rectangle_color_1t2o = 0
        P3T_rectangle_color_1t2o = 0
        #P4T_rectangle_color_1t2o = 0
        #P5T_rectangle_color_1t2o = 0
        #P6T_rectangle_color_1t2o = 0
        #P7T_rectangle_color_1t2o = 0
        #P8T_rectangle_color_1t2o = 0
      Each Frame:
        #print(ClickCount1)

        if mouse.isPressedIn(P2T_rectangle_1t):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_1t.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color_1t2o = 1
                elif lineColor == 'black':
                    P2T_rectangle_1t.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color_1t2o = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse.isPressedIn(P3T_rectangle_1t):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_1t.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color_1t2o = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_1t.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color_1t2o = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse.isPressedIn(finish_2):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P2T_rectangle_1t.lineColor = 'white'
        P3T_rectangle_1t.lineColor = 'white'
        print("block1_1target")
        print("correct")
        print(corr_p2)
        print(corr_p3)
        print(type(corr_p2))
        print(type(corr_p3))
        print("choices")
        print(P2T_rectangle_color_1t2o)
        print(P3T_rectangle_color_1t2o)
        print(type(P2T_rectangle_color_1t2o))
        print(type(P3T_rectangle_color_1t2o))

        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        #if objects == 2:
        #    if float(corr_p2) == float(P2T_rectangle_color_1t2o):
        #        print("corr_p1 correct")
        #        if float(corr_p3) == float(P3T_rectangle_color_1t2o):
        #            print("corr_p2 correct")
        #            mng_exptrials_t1.addData('accuracy_t1_o2', 1) #OR exp.addData('letter', letter)
        #            msg = "Correct"
        #            incorr = 0
        #    else:
        #        print("Incorrect")
        #        msg = "Incorrect"
        #        incorr = 1
        #        mng_exptrials_t1.addData('accuracy_t1_o2', 0) #OR exp.addData('letter', letter)
        #        print("value incorr")
        #        print(incorr)


        if objects ==2:
            if ((float(corr_p2) == float(P2T_rectangle_color_1t2o)) & (float(corr_p3) == float(P3T_rectangle_color_1t2o))):
                mng_exptrials_t1.addData('accuracy_t1_o2', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t1.addData('accuracy_t1_o2', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime();
        #end_trial = globalClock.getTime();
        #thisExp.addData("end", end_trial);
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        thisExp.addData("presented", 1)
    MouseComponent mouse_2
      clickable = P2T_rectangle_1t, P3T_rectangle_1t, finish_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_1t
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_1t
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_4
      disabled = True
      sound = WhatPicture.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_2
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_1target_3objects
    CodeComponent code_7
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 3:
            continueRoutine=False
        #beginning_trial = globalClock.getTime();
        #thisExp.addData("start", beginning_trial);

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
      Each Frame:
        #print(ClickCount1)
        if mouse_3.isPressedIn(P1T_rectangle_1t_2):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle_1t_2.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle_1t_2.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse_3.isPressedIn(P4T_rectangle_1t_2):
            if clicked4 == 0:
                clicked4 = 1
                if lineColor == 'white':
                    P4T_rectangle_1t_2.lineColor = 'black'
                    lineColor = 'black'
                    P4T_rectangle_color = 1
                    thisExp.addData('P4T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P4T_rectangle_1t_2.lineColor = 'white'
                    lineColor = 'white'
                    P4T_rectangle_color = 0
                    thisExp.addData('P4T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked4 == 1:
            clicked4 = 0

        if mouse_3.isPressedIn(P5T_rectangle_1t_2):
            if clicked5 == 0:
                clicked5 = 1
                if lineColor == 'white':
                    P5T_rectangle_1t_2.lineColor = 'black'
                    lineColor = 'black'
                    P5T_rectangle_color = 1
                    thisExp.addData('P5T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P5T_rectangle_1t_2.lineColor = 'white'
                    lineColor = 'white'
                    P5T_rectangle_color = 0
                    thisExp.addData('P5T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked5 == 1:
            clicked5 = 0

        if mouse_3.isPressedIn(finish_3):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle_1t_2.lineColor = 'white'
        P4T_rectangle_1t_2.lineColor = 'white'
        P5T_rectangle_1t_2.lineColor = 'white'

        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))


        #if objects == 3:
        #    if float(corr_p4) == float(P4T_rectangle_color):
        #        if float(corr_p1) == float(P1T_rectangle_color):
        #            if float(corr_p5) == float(P5T_rectangle_color):
        #                mng_exptrials_t1.addData('accuracy_t1_o3', 1) #OR exp.addData('letter', letter)
        #                msg = "Correct"
        #                incorr = 0
        #    else:
        #        msg = "Incorrect"
        #        incorr = 1
        #        mng_exptrials_t1.addData('accuracy_t1_o3', 0) #OR exp.addData('letter', letter)
        #        print("value incorr")
        #        print(incorr)

        if objects ==3:
            if ((float(corr_p4) == float(P4T_rectangle_color)) & (float(corr_p1) == float(P1T_rectangle_color)) & (float(corr_p5) == float(P5T_rectangle_color))):
                mng_exptrials_t1.addData('accuracy_t1_o3', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t1.addData('accuracy_t1_o3', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime();
        #end_trial = globalClock.getTime();
        #thisExp.addData("end", end_trial);
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        thisExp.addData("presented", 1)
    MouseComponent mouse_3
      clickable = P1T_rectangle_1t_2, P4T_rectangle_1t_2, P5T_rectangle_1t_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle_1t_2
      fillColor = white
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle_1t_2
      fillColor = white
      pos = (.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle_1t_2
      fillColor = white
      pos = (-.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_2
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_2
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_2
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_2
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_2
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_2
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_2
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_2
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_2
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_5
      disabled = True
      sound = WhatPicture.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_3
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_1target_4objects
    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 4:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()
        #thisExp.addData("start", beginning_trial);

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
      Each Frame:
        #print(ClickCount1)

        if mouse_4.isPressedIn(P2T_rectangle_1t_3):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_1t_3.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_1t_3.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_4.isPressedIn(P3T_rectangle_1t_3):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_1t_3.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_1t_3.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_4.isPressedIn(P6T_rectangle_1t_3):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_1t_3.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_1t_3.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_4.isPressedIn(P7T_rectangle_1t_3):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_1t_3.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_1t_3.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0


        if mouse_4.isPressedIn(finish_4):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_1t_3.lineColor = 'white'
        P3T_rectangle_1t_3.lineColor = 'white'
        P6T_rectangle_1t_3.lineColor = 'white'
        P7T_rectangle_1t_3.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects ==4:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color))):
                            mng_exptrials_t1.addData('accuracy_t1_o4', 1) #OR exp.addData('letter', letter)
                            msg = "Correct"
                            incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t1.addData('accuracy_t1_o4', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime();
        #end_trial = globalClock.getTime();
        #thisExp.addData("end", end_trial);
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        thisExp.addData("presented", 1)
    MouseComponent mouse_4
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_1t_3
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_1t_3
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_1t_3
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_1t_3
      fillColor = white
      pos = (-.375, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_3
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_3
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_3
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_3
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_3
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_3
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_3
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_3
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_3
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_6
      disabled = True
      sound = WhatPicture.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_4
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_1target_5objects
    CodeComponent code_9
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects < 4:
            continueRoutine=False
        #beginning_trial = globalClock.getTime();
        #thisExp.addData("start", beginning_trial);

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
      Each Frame:
        #print(ClickCount1)
        if mouse_5.isPressedIn(P1T_rectangle_1t_4):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle_1t_4.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle_1t_4.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse_5.isPressedIn(P4T_rectangle_1t_4):
            if clicked4 == 0:
                clicked4 = 1
                if lineColor == 'white':
                    P4T_rectangle_1t_4.lineColor = 'black'
                    lineColor = 'black'
                    P4T_rectangle_color = 1
                    thisExp.addData('P4T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P4T_rectangle_1t_4.lineColor = 'white'
                    lineColor = 'white'
                    P4T_rectangle_color = 0
                    thisExp.addData('P4T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked4 == 1:
            clicked4 = 0

        if mouse_5.isPressedIn(P5T_rectangle_1t_4):
            if clicked5 == 0:
                clicked5 = 1
                if lineColor == 'white':
                    P5T_rectangle_1t_4.lineColor = 'black'
                    lineColor = 'black'
                    P5T_rectangle_color = 1
                    thisExp.addData('P5T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P5T_rectangle_1t_4.lineColor = 'white'
                    lineColor = 'white'
                    P5T_rectangle_color = 0
                    thisExp.addData('P5T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked5 == 1:
            clicked5 = 0

        if mouse_5.isPressedIn(P8T_rectangle_1t_4):
            if clicked8 == 0:
                clicked8 = 1
                if lineColor == 'white':
                    P8T_rectangle_1t_4.lineColor = 'black'
                    lineColor = 'black'
                    P8T_rectangle_color = 1
                    thisExp.addData('P8T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P8T_rectangle_1t_4.lineColor = 'white'
                    lineColor = 'white'
                    P8T_rectangle_color = 0
                    thisExp.addData('P8T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked8 == 1:
            clicked8 = 0

        if mouse_5.isPressedIn(P9T_rectangle_1t_4):
            if clicked9 == 0:
                clicked9 = 1
                if lineColor == 'white':
                    P9T_rectangle_1t_4.lineColor = 'black'
                    lineColor = 'black'
                    P9T_rectangle_color = 1
                    thisExp.addData('P9T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P9T_rectangle_1t_4.lineColor = 'white'
                    lineColor = 'white'
                    P9T_rectangle_color = 0
                    thisExp.addData('P9T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked9 == 1:
            clicked9 = 0

        if mouse_5.isPressedIn(finish_5):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle_1t_4.lineColor = 'white'
        P4T_rectangle_1t_4.lineColor = 'white'
        P5T_rectangle_1t_4.lineColor = 'white'
        P8T_rectangle_1t_4.lineColor = 'white'
        P9T_rectangle_1t_4.lineColor = 'white'


        if objects == 5:
            if ((float(corr_p1) == float(P1T_rectangle_color)) & (float(corr_p4) == float(P4T_rectangle_color)) & (float(corr_p5) == float(P5T_rectangle_color)) & (float(corr_p8) == float(P8T_rectangle_color)) & (float(corr_p9) == float(P9T_rectangle_color))):
                mng_exptrials_t1.addData('accuracy_t1_o5', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t1.addData('accuracy_t1_o5', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime();
        #end_trial = globalClock.getTime();
        #thisExp.addData("end", end_trial);
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        thisExp.addData("presented", 1)
    MouseComponent mouse_5
      clickable = P1T_rectangle_1t_4, P4T_rectangle_1t_4, P5T_rectangle_1t_4, P8T_rectangle_1t_4, P9T_rectangle_1t_4
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle_1t_4
      fillColor = white
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle_1t_4
      fillColor = white
      pos = (.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle_1t_4
      fillColor = white
      pos = (-.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P8T_rectangle_1t_4
      fillColor = white
      pos = (.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P9T_rectangle_1t_4
      fillColor = white
      pos = (-.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_4
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_4
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_4
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_4
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_4
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_4
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_4
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_4
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_4
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_7
      disabled = True
      sound = WhatPicture.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_5
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_probe_2target
    SoundComponent sound_8
      disabled = True
      sound = Look At These 2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P2_sample_2t
      image [set every repeat] = $probe_p2
      pos = (.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P3_sample_2t
      image [set every repeat] = $probe_p3
      pos = (-.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_8
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    CodeComponent code_32
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_test_2target_4objects
    CodeComponent code_10
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 4:
            continueRoutine=False
        #beginning_trial = globalClock.getTime();

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)

        if mouse_18.isPressedIn(P2T_rectangle_2t_4):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_2t_4.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_2t_4.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_18.isPressedIn(P3T_rectangle_2t_4):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_2t_4.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_2t_4.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_18.isPressedIn(P6T_rectangle_2t_4):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_2t_4.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_2t_4.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_18.isPressedIn(P7T_rectangle_2t_4):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_2t_4.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_2t_4.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0


        if mouse_18.isPressedIn(finish_6):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_2t_4.lineColor = 'white'
        P3T_rectangle_2t_4.lineColor = 'white'
        P6T_rectangle_2t_4.lineColor = 'white'
        P7T_rectangle_2t_4.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 4:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color))):
                mng_exptrials_t2.addData('accuracy_t2_o4', 1) #OR exp.addData('letter', letter)
                #mng_exptrials_t2.addData('test_accuracy', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t2.addData('accuracy_t2_o4', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)


        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_18
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_2t_4
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_2t_4
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_2t_4
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_2t_4
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_5
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_5
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_5
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_5
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_5
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_5
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_5
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_5
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_5
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_9
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_6
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_2target_5objects
    CodeComponent code_11
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 5:
            continueRoutine=False

        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)
        if mouse_7.isPressedIn(P1T_rectangle_2t_5):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle_2t_5.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle_2t_5.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse_7.isPressedIn(P4T_rectangle_2t_5):
            if clicked4 == 0:
                clicked4 = 1
                if lineColor == 'white':
                    P4T_rectangle_2t_5.lineColor = 'black'
                    lineColor = 'black'
                    P4T_rectangle_color = 1
                    thisExp.addData('P4T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P4T_rectangle_2t_5.lineColor = 'white'
                    lineColor = 'white'
                    P4T_rectangle_color = 0
                    thisExp.addData('P4T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked4 == 1:
            clicked4 = 0

        if mouse_7.isPressedIn(P5T_rectangle_2t_5):
            if clicked5 == 0:
                clicked5 = 1
                if lineColor == 'white':
                    P5T_rectangle_2t_5.lineColor = 'black'
                    lineColor = 'black'
                    P5T_rectangle_color = 1
                    thisExp.addData('P5T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P5T_rectangle_2t_5.lineColor = 'white'
                    lineColor = 'white'
                    P5T_rectangle_color = 0
                    thisExp.addData('P5T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked5 == 1:
            clicked5 = 0

        if mouse_7.isPressedIn(P8T_rectangle_2t_5):
            if clicked8 == 0:
                clicked8 = 1
                if lineColor == 'white':
                    P8T_rectangle_2t_5.lineColor = 'black'
                    lineColor = 'black'
                    P8T_rectangle_color = 1
                    thisExp.addData('P8T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P8T_rectangle_2t_5.lineColor = 'white'
                    lineColor = 'white'
                    P8T_rectangle_color = 0
                    thisExp.addData('P8T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked8 == 1:
            clicked8 = 0

        if mouse_7.isPressedIn(P9T_rectangle_2t_5):
            if clicked9 == 0:
                clicked9 = 1
                if lineColor == 'white':
                    P9T_rectangle_2t_5.lineColor = 'black'
                    lineColor = 'black'
                    P9T_rectangle_color = 1
                    thisExp.addData('P9T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P9T_rectangle_2t_5.lineColor = 'white'
                    lineColor = 'white'
                    P9T_rectangle_color = 0
                    thisExp.addData('P9T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked9 == 1:
            clicked9 = 0

        if mouse_7.isPressedIn(finish_7):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle_2t_5.lineColor = 'white'
        P4T_rectangle_2t_5.lineColor = 'white'
        P5T_rectangle_2t_5.lineColor = 'white'
        P8T_rectangle_2t_5.lineColor = 'white'
        P9T_rectangle_2t_5.lineColor = 'white'

        if objects == 5:
            if ((float(corr_p1) == float(P1T_rectangle_color)) & (float(corr_p4) == float(P4T_rectangle_color)) & (float(corr_p5) == float(P5T_rectangle_color)) & (float(corr_p8) == float(P8T_rectangle_color)) & (float(corr_p9) == float(P9T_rectangle_color))):
                mng_exptrials_t2.addData('accuracy_t2_o5', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t2.addData('accuracy_t2_o5', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_7
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle_2t_5
      fillColor = white
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle_2t_5
      fillColor = white
      pos = (.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle_2t_5
      fillColor = white
      pos = (-.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P8T_rectangle_2t_5
      fillColor = white
      pos = (.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P9T_rectangle_2t_5
      fillColor = white
      pos = (-.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_6
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_6
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_6
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_6
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_6
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_6
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_6
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_6
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_6
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_10
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_7
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_2target_6objects
    CodeComponent code_12
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects < 5:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)

        if mouse_8.isPressedIn(P2T_rectangle_2t_6):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_8.isPressedIn(P3T_rectangle_2t_6):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_8.isPressedIn(P6T_rectangle_2t_6):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_8.isPressedIn(P7T_rectangle_2t_6):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_8.isPressedIn(P10T_rectangle_2t_6):
            if clicked10 == 0:
                clicked10 = 1
                if lineColor == 'white':
                    P10T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P10T_rectangle', 1) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 1
                elif lineColor == 'black':
                    P10T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P10T_rectangle', 0) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 0
        elif clicked10 == 1:
            clicked10 = 0

        if mouse_8.isPressedIn(P11T_rectangle_2t_6):
            if clicked11 == 0:
                clicked11 = 1
                if lineColor == 'white':
                    P11T_rectangle_2t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P11T_rectangle', 1) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 1
                elif lineColor == 'black':
                    P11T_rectangle_2t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P11T_rectangle', 0) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 0
        elif clicked11 == 1:
            clicked11 = 0

        if mouse_8.isPressedIn(finish_8):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_2t_6.lineColor = 'white'
        P3T_rectangle_2t_6.lineColor = 'white'
        P6T_rectangle_2t_6.lineColor = 'white'
        P7T_rectangle_2t_6.lineColor = 'white'
        P10T_rectangle_2t_6.lineColor = 'white'
        P11T_rectangle_2t_6.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 6:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color)) & (float(corr_p10) == float(P10T_rectangle_color)) & (float(corr_p11) == float(P11T_rectangle_color))):
                mng_exptrials_t2.addData('accuracy_t2_o6', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t2.addData('accuracy_t2_o6', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_8
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_2t_6
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_2t_6
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_2t_6
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_2t_6
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P10T_rectangle_2t_6
      fillColor = white
      pos = (.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P11T_rectangle_2t_6
      fillColor = white
      pos = (-.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_7
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_7
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_7
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_7
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_7
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_7
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_7
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_7
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_7
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t_7
      image [set every repeat] = $test_p10
      pos = (0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t_7
      image [set every repeat] = $test_p11
      pos = (-0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_11
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_8
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_probe_3target
    SoundComponent sound_12
      disabled = True
      sound = Look At These 2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P1_sample_3t
      image [set every repeat] = $probe_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P4_sample_3t
      image [set every repeat] = $probe_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent P5_sample_3t
      image [set every repeat] = $probe_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_9
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    CodeComponent code_33
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False
      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_test_3target_5objects
    CodeComponent code_13
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 5:
            continueRoutine=False

        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)
        if mouse_9.isPressedIn(P1T_rectangle_3t_5):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle_3t_5.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle_3t_5.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse_9.isPressedIn(P4T_rectangle_3t_5):
            if clicked4 == 0:
                clicked4 = 1
                if lineColor == 'white':
                    P4T_rectangle_3t_5.lineColor = 'black'
                    lineColor = 'black'
                    P4T_rectangle_color = 1
                    thisExp.addData('P4T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P4T_rectangle_3t_5.lineColor = 'white'
                    lineColor = 'white'
                    P4T_rectangle_color = 0
                    thisExp.addData('P4T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked4 == 1:
            clicked4 = 0

        if mouse_9.isPressedIn(P5T_rectangle_3t_5):
            if clicked5 == 0:
                clicked5 = 1
                if lineColor == 'white':
                    P5T_rectangle_3t_5.lineColor = 'black'
                    lineColor = 'black'
                    P5T_rectangle_color = 1
                    thisExp.addData('P5T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P5T_rectangle_3t_5.lineColor = 'white'
                    lineColor = 'white'
                    P5T_rectangle_color = 0
                    thisExp.addData('P5T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked5 == 1:
            clicked5 = 0

        if mouse_9.isPressedIn(P8T_rectangle_3t_5):
            if clicked8 == 0:
                clicked8 = 1
                if lineColor == 'white':
                    P8T_rectangle_3t_5.lineColor = 'black'
                    lineColor = 'black'
                    P8T_rectangle_color = 1
                    thisExp.addData('P8T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P8T_rectangle_3t_5.lineColor = 'white'
                    lineColor = 'white'
                    P8T_rectangle_color = 0
                    thisExp.addData('P8T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked8 == 1:
            clicked8 = 0

        if mouse_9.isPressedIn(P9T_rectangle_3t_5):
            if clicked9 == 0:
                clicked9 = 1
                if lineColor == 'white':
                    P9T_rectangle_3t_5.lineColor = 'black'
                    lineColor = 'black'
                    P9T_rectangle_color = 1
                    thisExp.addData('P9T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P9T_rectangle_3t_5.lineColor = 'white'
                    lineColor = 'white'
                    P9T_rectangle_color = 0
                    thisExp.addData('P9T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked9 == 1:
            clicked9 = 0

        if mouse_9.isPressedIn(finish_9):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0
        P1T_rectangle_3t_5.lineColor = 'white'
        P4T_rectangle_3t_5.lineColor = 'white'
        P5T_rectangle_3t_5.lineColor = 'white'
        P8T_rectangle_3t_5.lineColor = 'white'
        P9T_rectangle_3t_5.lineColor = 'white'

        if objects == 5:
            if ((float(corr_p1) == float(P1T_rectangle_color)) & (float(corr_p4) == float(P4T_rectangle_color)) & (float(corr_p5) == float(P5T_rectangle_color)) & (float(corr_p8) == float(P8T_rectangle_color)) & (float(corr_p9) == float(P9T_rectangle_color))):
                mng_exptrials_t3.addData('accuracy_t3_o5', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t3.addData('accuracy_t3_o5', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)


        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_9
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle_3t_5
      fillColor = white
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle_3t_5
      fillColor = white
      pos = (.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle_3t_5
      fillColor = white
      pos = (-.250, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P8T_rectangle_3t_5
      fillColor = white
      pos = (.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P9T_rectangle_3t_5
      fillColor = white
      pos = (-.500, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_8
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_8
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_8
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_8
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_8
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_8
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_8
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_8
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_8
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_13
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_9
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_15
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_3target_6objects
    CodeComponent code_14
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 6:
            continueRoutine=False

        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)

        if mouse_10.isPressedIn(P2T_rectangle_3t_6):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_10.isPressedIn(P3T_rectangle_3t_6):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_10.isPressedIn(P6T_rectangle_3t_6):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_10.isPressedIn(P7T_rectangle_3t_6):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_10.isPressedIn(P10T_rectangle_3t_6):
            if clicked10 == 0:
                clicked10 = 1
                if lineColor == 'white':
                    P10T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P10T_rectangle', 1) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 1
                elif lineColor == 'black':
                    P10T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P10T_rectangle', 0) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 0
        elif clicked10 == 1:
            clicked10 = 0

        if mouse_10.isPressedIn(P11T_rectangle_3t_6):
            if clicked11 == 0:
                clicked11 = 1
                if lineColor == 'white':
                    P11T_rectangle_3t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P11T_rectangle', 1) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 1
                elif lineColor == 'black':
                    P11T_rectangle_3t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P11T_rectangle', 0) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 0
        elif clicked11 == 1:
            clicked11 = 0

        if mouse_10.isPressedIn(finish_10):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_3t_6.lineColor = 'white'
        P3T_rectangle_3t_6.lineColor = 'white'
        P6T_rectangle_3t_6.lineColor = 'white'
        P7T_rectangle_3t_6.lineColor = 'white'
        P10T_rectangle_3t_6.lineColor = 'white'
        P11T_rectangle_3t_6.lineColor = 'white'

        print("block 3 6 objects")
        print("check colors")
        print(float(P2T_rectangle_color))
        print(float(P3T_rectangle_color))
        print(float(P6T_rectangle_color))
        print(float(P7T_rectangle_color))
        print(float(P10T_rectangle_color))
        print(float(P11T_rectangle_color))

        print("check corrs")
        print(float(corr_p2))
        print(float(corr_p3))
        print(float(corr_p6))
        print(float(corr_p7))
        print(float(corr_p10))
        print(float(corr_p11))

        if objects == 6:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color)) & (float(corr_p10) == float(P10T_rectangle_color)) & (float(corr_p11) == float(P11T_rectangle_color))):
                mng_exptrials_t3.addData('accuracy_t3_o6', 1) #OR exp.addData('letter', letter)
            else:
                msg = "Incorrect"
                print("Incorrect")
                incorr = 1
                mng_exptrials_t3.addData('accuracy_t3_o6', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_10
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_3t_6
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_3t_6
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_3t_6
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_3t_6
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P10T_rectangle_3t_6
      fillColor = white
      pos = (.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P11T_rectangle_3t_6
      fillColor = white
      pos = (-.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_9
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_9
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_9
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_9
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_9
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_9
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_9
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_9
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_9
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t
      image [set every repeat] = $test_p10
      pos = (0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t
      image [set every repeat] = $test_p11
      pos = (-0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_14
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_10
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_3target_8objects
    CodeComponent code_15
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects < 5:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        clicked12 = 0
        clicked13 = 0
        clicked14 = 0
        clicked15 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
        P12T_rectangle_color = 0
        P13T_rectangle_color = 0
        P14T_rectangle_color = 0
        P15T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)

        if mouse_11.isPressedIn(P2T_rectangle_3t_8):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_11.isPressedIn(P3T_rectangle_3t_8):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_11.isPressedIn(P6T_rectangle_3t_8):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_11.isPressedIn(P7T_rectangle_3t_8):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_11.isPressedIn(P12T_rectangle_3t_8):
            if clicked12 == 0:
                clicked12 = 1
                if lineColor == 'white':
                    P12T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P12T_rectangle', 1) #OR exp.addData('letter', letter)
                    P12T_rectangle_color = 1
                elif lineColor == 'black':
                    P12T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P12T_rectangle', 0) #OR exp.addData('letter', letter)
                    P12T_rectangle_color = 0
        elif clicked12 == 1:
            clicked12 = 0

        if mouse_11.isPressedIn(P13T_rectangle_3t_8):
            if clicked13 == 0:
                clicked13 = 1
                if lineColor == 'white':
                    P13T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P13T_rectangle', 1) #OR exp.addData('letter', letter)
                    P13T_rectangle_color = 1
                elif lineColor == 'black':
                    P13T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P13T_rectangle', 0) #OR exp.addData('letter', letter)
                    P13T_rectangle_color = 0
        elif clicked13 == 1:
            clicked13 = 0

        if mouse_11.isPressedIn(P14T_rectangle_3t_8):
            if clicked14 == 0:
                clicked14 = 1
                if lineColor == 'white':
                    P14T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P14T_rectangle', 1) #OR exp.addData('letter', letter)
                    P14T_rectangle_color = 1
                elif lineColor == 'black':
                    P14T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P14T_rectangle', 0) #OR exp.addData('letter', letter)
                    P14T_rectangle_color = 0
        elif clicked14 == 1:
            clicked14 = 0

        if mouse_11.isPressedIn(P15T_rectangle_3t_8):
            if clicked15 == 0:
                clicked15 = 1
                if lineColor == 'white':
                    P15T_rectangle_3t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P15T_rectangle', 1) #OR exp.addData('letter', letter)
                    P15T_rectangle_color = 1
                elif lineColor == 'black':
                    P15T_rectangle_3t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P15T_rectangle', 0) #OR exp.addData('letter', letter)
                    P15T_rectangle_color = 0
        elif clicked15 == 1:
            clicked15 = 0


        if mouse_11.isPressedIn(finish_11):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_3t_8.lineColor = 'white'
        P3T_rectangle_3t_8.lineColor = 'white'
        P6T_rectangle_3t_8.lineColor = 'white'
        P7T_rectangle_3t_8.lineColor = 'white'
        P12T_rectangle_3t_8.lineColor = 'white'
        P13T_rectangle_3t_8.lineColor = 'white'
        P14T_rectangle_3t_8.lineColor = 'white'
        P15T_rectangle_3t_8.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 8:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color)) & (float(corr_p10) == float(P10T_rectangle_color)) & (float(corr_p11) == float(P11T_rectangle_color)) & (float(corr_p12) == float(P12T_rectangle_color)) & (float(corr_p13) == float(P13T_rectangle_color)) & (float(corr_p14) == float(P14T_rectangle_color)) & (float(corr_p15) == float(P15T_rectangle_color))):
                mng_exptrials_t3.addData('accuracy_t3_o8', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t3.addData('accuracy_t3_o8', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_11
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_3t_8
      fillColor = white
      pos = (0.125, .150)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_3t_8
      fillColor = white
      pos = (-0.125,.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_3t_8
      fillColor = white
      pos = (0.375, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_3t_8
      fillColor = white
      pos = (-.375, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P12T_rectangle_3t_8
      fillColor = white
      pos = (.125, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P13T_rectangle_3t_8
      fillColor = white
      pos = (-.125, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P14T_rectangle_3t_8
      fillColor = white
      pos = (.375, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P15T_rectangle_3t_8
      fillColor = white
      pos = (-.375, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_10
      image [set every repeat] = $test_p1
      pos = (0, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_10
      image [set every repeat] = $test_p2
      pos = (0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_10
      image [set every repeat] = $test_p3
      pos = (-0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_10
      image [set every repeat] = $test_p4
      pos = (.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_10
      image [set every repeat] = $test_p5
      pos = (-.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_10
      image [set every repeat] = $test_p6
      pos = (0.375, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_10
      image [set every repeat] = $test_p7
      pos = (-.375, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_10
      image [set every repeat] = $test_p8
      pos = (.500, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_10
      image [set every repeat] = $test_p9
      pos = (-.500, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t_8
      image [set every repeat] = $test_p10
      pos = (0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t_8
      image [set every repeat] = $test_p11
      pos = (-0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P12_1t_8
      image [set every repeat] = $test_p12
      pos = (.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P13_1t_8
      image [set every repeat] = $test_p13
      pos = (-.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P14_1t_8
      image [set every repeat] = $test_p14
      pos = (.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P15_1t_8
      image [set every repeat] = $test_p15
      pos = (-.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_15
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_11
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_4target_6objects
    CodeComponent code_16
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 6:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False

        if meanb3 < acc_thr:
                continueRoutine=False

        if mouse_12.isPressedIn(P2T_rectangle_4t_6):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_12.isPressedIn(P3T_rectangle_4t_6):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_12.isPressedIn(P6T_rectangle_4t_6):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_12.isPressedIn(P7T_rectangle_4t_6):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_12.isPressedIn(P10T_rectangle_4t_6):
            if clicked10 == 0:
                clicked10 = 1
                if lineColor == 'white':
                    P10T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P10T_rectangle', 1) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 1
                elif lineColor == 'black':
                    P10T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P10T_rectangle', 0) #OR exp.addData('letter', letter)
                    P10T_rectangle_color = 0
        elif clicked10 == 1:
            clicked10 = 0

        if mouse_12.isPressedIn(P11T_rectangle_4t_6):
            if clicked11 == 0:
                clicked11 = 1
                if lineColor == 'white':
                    P11T_rectangle_4t_6.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P11T_rectangle', 1) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 1
                elif lineColor == 'black':
                    P11T_rectangle_4t_6.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P11T_rectangle', 0) #OR exp.addData('letter', letter)
                    P11T_rectangle_color = 0
        elif clicked11 == 1:
            clicked11 = 0

        if mouse_12.isPressedIn(finish_12):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_4t_6.lineColor = 'white'
        P3T_rectangle_4t_6.lineColor = 'white'
        P6T_rectangle_4t_6.lineColor = 'white'
        P7T_rectangle_4t_6.lineColor = 'white'
        P10T_rectangle_4t_6.lineColor = 'white'
        P11T_rectangle_4t_6.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 6:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color)) & (float(corr_p10) == float(P10T_rectangle_color)) & (float(corr_p11) == float(P11T_rectangle_color))):
                mng_exptrials_t4.addData('accuracy_t4_o6', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t4.addData('accuracy_t4_o6', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)


        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < 66:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb3 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_12
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_4t_6
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_4t_6
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_4t_6
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_4t_6
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P10T_rectangle_4t_6
      fillColor = white
      pos = (.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P11T_rectangle_4t_6
      fillColor = white
      pos = (-.625, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_11
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_11
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_11
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_11
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_11
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_11
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_11
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_11
      image [set every repeat] = $test_p8
      pos = (.500, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_11
      image [set every repeat] = $test_p9
      pos = (-.500, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t_2
      image [set every repeat] = $test_p10
      pos = (0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t_2
      image [set every repeat] = $test_p11
      pos = (-0.625, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_16
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_12
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_4target_8objects
    CodeComponent code_17
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects > 8:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        clicked12 = 0
        clicked13 = 0
        clicked14 = 0
        clicked15 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
        P12T_rectangle_color = 0
        P13T_rectangle_color = 0
        P14T_rectangle_color = 0
        P15T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False

        if meanb3 < acc_thr:
                continueRoutine=False

        if mouse_13.isPressedIn(P2T_rectangle_4t_8):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_13.isPressedIn(P3T_rectangle_4t_8):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_13.isPressedIn(P6T_rectangle_4t_8):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_13.isPressedIn(P7T_rectangle_4t_8):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_13.isPressedIn(P12T_rectangle_4t_8):
            if clicked12 == 0:
                clicked12 = 1
                if lineColor == 'white':
                    P12T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P12T_rectangle', 1) #OR exp.addData('letter', letter)
                    P12T_rectangle_color = 1
                elif lineColor == 'black':
                    P12T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P12T_rectangle', 0) #OR exp.addData('letter', letter)
                    P12T_rectangle_color = 0
        elif clicked12 == 1:
            clicked12 = 0

        if mouse_13.isPressedIn(P13T_rectangle_4t_8):
            if clicked13 == 0:
                clicked13 = 1
                if lineColor == 'white':
                    P13T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P13T_rectangle', 1) #OR exp.addData('letter', letter)
                    P13T_rectangle_color = 1
                elif lineColor == 'black':
                    P13T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P13T_rectangle', 0) #OR exp.addData('letter', letter)
                    P13T_rectangle_color = 0
        elif clicked13 == 1:
            clicked13 = 0

        if mouse_13.isPressedIn(P14T_rectangle_4t_8):
            if clicked14 == 0:
                clicked14 = 1
                if lineColor == 'white':
                    P14T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P14T_rectangle', 1) #OR exp.addData('letter', letter)
                    P14T_rectangle_color = 1
                elif lineColor == 'black':
                    P14T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P14T_rectangle', 0) #OR exp.addData('letter', letter)
                    P14T_rectangle_color = 0
        elif clicked14 == 1:
            clicked14 = 0

        if mouse_13.isPressedIn(P15T_rectangle_4t_8):
            if clicked15 == 0:
                clicked15 = 1
                if lineColor == 'white':
                    P15T_rectangle_4t_8.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P15T_rectangle', 1) #OR exp.addData('letter', letter)
                    P15T_rectangle_color = 1
                elif lineColor == 'black':
                    P15T_rectangle_4t_8.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P15T_rectangle', 0) #OR exp.addData('letter', letter)
                    P15T_rectangle_color = 0
        elif clicked15 == 1:
            clicked15 = 0

        if mouse_13.isPressedIn(finish_11):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_4t_8.lineColor = 'white'
        P3T_rectangle_4t_8.lineColor = 'white'
        P6T_rectangle_4t_8.lineColor = 'white'
        P7T_rectangle_4t_8.lineColor = 'white'
        P12T_rectangle_4t_8.lineColor = 'white'
        P13T_rectangle_4t_8.lineColor = 'white'
        P14T_rectangle_4t_8.lineColor = 'white'
        P15T_rectangle_4t_8.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 8:
            if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color)) & (float(corr_p12) == float(P12T_rectangle_color)) & (float(corr_p13) == float(P13T_rectangle_color)) & (float(corr_p14) == float(P14T_rectangle_color)) & (float(corr_p15) == float(P15T_rectangle_color))):
                mng_exptrials_t4.addData('accuracy_t4_o8', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t4.addData('accuracy_t4_o8', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb3 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_13
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_4t_8
      fillColor = white
      pos = (0.125, .150)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_4t_8
      fillColor = white
      pos = (-0.125,.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_4t_8
      fillColor = white
      pos = (0.375, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_4t_8
      fillColor = white
      pos = (-.375, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P12T_rectangle_4t_8
      fillColor = white
      pos = (.125, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P13T_rectangle_4t_8
      fillColor = white
      pos = (-.125, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P14T_rectangle_4t_8
      fillColor = white
      pos = (.375, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P15T_rectangle_4t_8
      fillColor = white
      pos = (-.375, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_12
      image [set every repeat] = $test_p1
      pos = (0, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_12
      image [set every repeat] = $test_p2
      pos = (0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_12
      image [set every repeat] = $test_p3
      pos = (-0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_12
      image [set every repeat] = $test_p4
      pos = (.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_12
      image [set every repeat] = $test_p5
      pos = (-.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_12
      image [set every repeat] = $test_p6
      pos = (0.375, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_12
      image [set every repeat] = $test_p7
      pos = (-.375, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_12
      image [set every repeat] = $test_p8
      pos = (.500, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_12
      image [set every repeat] = $test_p9
      pos = (-.500, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t_9
      image [set every repeat] = $test_p10
      pos = (0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t_9
      image [set every repeat] = $test_p11
      pos = (-0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P12_1t
      image [set every repeat] = $test_p12
      pos = (.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P13_1t
      image [set every repeat] = $test_p13
      pos = (-.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P14_1t
      image [set every repeat] = $test_p14
      pos = (.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P15_1t
      image [set every repeat] = $test_p15
      pos = (-.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_17
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_13
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_test_4target_10objects
    CodeComponent code_18
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        if objects < 5:
            continueRoutine=False
        #beginning_trial = globalClock.getTime()

        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        clicked9 = 0
        clicked10 = 0
        clicked11 = 0
        clicked12 = 0
        clicked13 = 0
        clicked14 = 0
        clicked15 = 0
        clicked16 = 0
        clicked17 = 0
        clicked18 = 0
        clicked19 = 0
        clicked20 = 0

        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
        P9T_rectangle_color = 0
        P10T_rectangle_color = 0
        P11T_rectangle_color = 0
        P12T_rectangle_color = 0
        P13T_rectangle_color = 0
        P14T_rectangle_color = 0
        P15T_rectangle_color = 0
        P16T_rectangle_color = 0
        P17T_rectangle_color = 0
        P18T_rectangle_color = 0
        P19T_rectangle_color = 0
        P20T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False

        if meanb3 < acc_thr:
                continueRoutine=False

        if mouse_14.isPressedIn(P1T_rectangle_4t_10):
            if clicked1 == 0:
                clicked1 = 1
                if lineColor == 'white':
                    P1T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    P1T_rectangle_color = 1
                    thisExp.addData('P1T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P1T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    P1T_rectangle_color = 0
                    thisExp.addData('P1T_rectangle', 0)
        elif clicked1 == 1:
            clicked1 = 0

        if mouse_14.isPressedIn(P4T_rectangle_4t_10):
            if clicked4 == 0:
                clicked4 = 1
                if lineColor == 'white':
                    P4T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    P4T_rectangle_color = 1
                    thisExp.addData('P4T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P4T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    P4T_rectangle_color = 0
                    thisExp.addData('P4T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked4 == 1:
            clicked4 = 0

        if mouse_14.isPressedIn(P5T_rectangle_4t_10):
            if clicked5 == 0:
                clicked5 = 1
                if lineColor == 'white':
                    P5T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    P5T_rectangle_color = 1
                    thisExp.addData('P5T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P5T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    P5T_rectangle_color = 0
                    thisExp.addData('P5T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked5 == 1:
            clicked5 = 0

        if mouse_14.isPressedIn(P8T_rectangle_4t_10):
            if clicked8 == 0:
                clicked8 = 1
                if lineColor == 'white':
                    P8T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    P8T_rectangle_color = 1
                    thisExp.addData('P8T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P8T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    P8T_rectangle_color = 0
                    thisExp.addData('P8T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked8 == 1:
            clicked8 = 0

        if mouse_14.isPressedIn(P9T_rectangle_4t_10):
            if clicked9 == 0:
                clicked9 = 1
                if lineColor == 'white':
                    P9T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P9T_rectangle', 1) #OR exp.addData('letter', letter)
                    P9T_rectangle_color = 1
                elif lineColor == 'black':
                    P9T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P9T_rectangle', 0) #OR exp.addData('letter', letter)
                    P9T_rectangle_color = 0
        elif clicked9 == 1:
            clicked9 = 0

        if mouse_14.isPressedIn(P16T_rectangle_4t_10):
            if clicked16 == 0:
                clicked16 = 1
                if lineColor == 'white':
                    P16T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P16T_rectangle', 1) #OR exp.addData('letter', letter)
                    P13T_rectangle_color = 1
                elif lineColor == 'black':
                    P16T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P16T_rectangle', 0) #OR exp.addData('letter', letter)
                    P16T_rectangle_color = 0
        elif clicked16 == 1:
            clicked16 = 0

        if mouse_14.isPressedIn(P17T_rectangle_4t_10):
            if clicked17 == 0:
                clicked17 = 1
                if lineColor == 'white':
                    P17T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P17T_rectangle', 1) #OR exp.addData('letter', letter)
                    P17T_rectangle_color = 1
                elif lineColor == 'black':
                    P17T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P17T_rectangle', 0) #OR exp.addData('letter', letter)
                    P17T_rectangle_color = 0
        elif clicked17 == 1:
            clicked17 = 0

        if mouse_14.isPressedIn(P18T_rectangle_4t_10):
            if clicked18 == 0:
                clicked18 = 1
                if lineColor == 'white':
                    P18T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P18T_rectangle', 1) #OR exp.addData('letter', letter)
                    P18T_rectangle_color = 1
                elif lineColor == 'black':
                    P18T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P18T_rectangle', 0) #OR exp.addData('letter', letter)
                    P18T_rectangle_color = 0
        elif clicked18 == 1:
            clicked18 = 0

        if mouse_14.isPressedIn(P19T_rectangle_4t_10):
            if clicked19 == 0:
                clicked19 = 1
                if lineColor == 'white':
                    P19T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P19T_rectangle', 1) #OR exp.addData('letter', letter)
                    P19T_rectangle_color = 1
                elif lineColor == 'black':
                    P19T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P19T_rectangle', 0) #OR exp.addData('letter', letter)
                    P19T_rectangle_color = 0
        elif clicked19 == 1:
            clicked19 = 0

        if mouse_14.isPressedIn(P20T_rectangle_4t_10):
            if clicked20 == 0:
                clicked20 = 1
                if lineColor == 'white':
                    P20T_rectangle_4t_10.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P20T_rectangle', 1) #OR exp.addData('letter', letter)
                    P20T_rectangle_color = 1
                elif lineColor == 'black':
                    P20T_rectangle_4t_10.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P20T_rectangle', 0) #OR exp.addData('letter', letter)
                    P20T_rectangle_color = 0
        elif clicked20 == 1:
            clicked20 = 0

        if mouse_14.isPressedIn(finish_14):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P1T_rectangle_4t_10.lineColor = 'white'
        P4T_rectangle_4t_10.lineColor = 'white'
        P5T_rectangle_4t_10.lineColor = 'white'
        P8T_rectangle_4t_10.lineColor = 'white'
        P9T_rectangle_4t_10.lineColor = 'white'
        P16T_rectangle_4t_10.lineColor = 'white'
        P17T_rectangle_4t_10.lineColor = 'white'
        P18T_rectangle_4t_10.lineColor = 'white'
        P19T_rectangle_4t_10.lineColor = 'white'
        P20T_rectangle_4t_10.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if objects == 10:
            if ((float(corr_p1) == float(P1T_rectangle_color)) & (float(corr_p4) == float(P4T_rectangle_color)) & (float(corr_p5) == float(P5T_rectangle_color)) & (float(corr_p8) == float(P8T_rectangle_color)) & (float(corr_p9) == float(P9T_rectangle_color)) & (float(corr_p16) == float(P16T_rectangle_color)) & (float(corr_p17) == float(P17T_rectangle_color)) & (float(corr_p18) == float(P18T_rectangle_color)) & (float(corr_p19) == float(P19T_rectangle_color)) & (float(corr_p20) == float(P20T_rectangle_color))):
                mng_exptrials_t4.addData('accuracy_t4_o10', 1) #OR exp.addData('letter', letter)
                msg = "Correct"
                incorr = 0
            else:
                msg = "Incorrect"
                incorr = 1
                mng_exptrials_t4.addData('accuracy_t4_o10', 0) #OR exp.addData('letter', letter)
                print("value incorr")
                print(incorr)

        #beginning_trial = globalClock.getTime()
        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb2 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        elif meanb3 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_14
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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    PolygonComponent P1T_rectangle_4t_10
      fillColor = white
      pos = (0, .150)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P4T_rectangle_4t_10
      fillColor = white
      pos = (.250,.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P5T_rectangle_4t_10
      fillColor = white
      pos = (-.250, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P8T_rectangle_4t_10
      fillColor = white
      pos = (.500, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P9T_rectangle_4t_10
      fillColor = white
      pos = (-.500, .150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P16T_rectangle_4t_10
      fillColor = white
      pos = (0, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P17T_rectangle_4t_10
      fillColor = white
      pos = (.250, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P18T_rectangle_4t_10
      fillColor = white
      pos = (-.250, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P19T_rectangle_4t_10
      fillColor = white
      pos = (.500, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P20T_rectangle_4t_10
      fillColor = white
      pos = (-.500, -.150)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_13
      image [set every repeat] = $test_p1
      pos = (0, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_13
      image [set every repeat] = $test_p2
      pos = (0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_13
      image [set every repeat] = $test_p3
      pos = (-0.125, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_13
      image [set every repeat] = $test_p4
      pos = (.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_13
      image [set every repeat] = $test_p5
      pos = (-.250, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_13
      image [set every repeat] = $test_p6
      pos = (0.375, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_13
      image [set every repeat] = $test_p7
      pos = (-.375, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P8t_1t_13
      image [set every repeat] = $test_p8
      pos = (.500, .150)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P9t_1t_13
      image [set every repeat] = $test_p9
      pos = (-.500, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P10t_1t_10
      image [set every repeat] = $test_p10
      pos = (0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P11_1t_10
      image [set every repeat] = $test_p11
      pos = (-0.625, .150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P12_1t_9
      image [set every repeat] = $test_p12
      pos = (.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P13_1t_9
      image [set every repeat] = $test_p13
      pos = (-.125, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P14_1t_9
      image [set every repeat] = $test_p14
      pos = (.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P15_1t_9
      image [set every repeat] = $test_p15
      pos = (-.375, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P16_1t_9
      image [set every repeat] = $test_p16
      pos = (0, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P17_1t_9
      image [set every repeat] = $test_p17
      pos = (.250, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P18_1t_9
      image [set every repeat] = $test_p18
      pos = (-.250, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P19_1t_9
      image [set every repeat] = $test_p19
      pos = (.500, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P20_1t_9
      image [set every repeat] = $test_p20
      pos = (-.500, -.150)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent finish_14
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    SoundComponent sound_18
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_20
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_probe_4target
    SoundComponent sound_19
      disabled = True
      sound = Look At These 2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P2_sample_4t
      image [set every repeat] = $probe_p2
      pos = (.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P3_sample_4t
      image [set every repeat] = $probe_p3
      pos = (-.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent P6_sample_4t
      image [set every repeat] = $probe_p6
      pos = (.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent P7_sample_4t
      image [set every repeat] = $probe_p7
      pos = (-.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_10
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    CodeComponent code_34
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False

        if meanb3 < acc_thr:
                continueRoutine=False
      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_probe_sample2
    SoundComponent sound_20
      disabled = True
      sound = Look At These 2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent P2_sample2_2t
      image [set every repeat] = $probe_p2
      pos = (.125, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent P3_sample2_2t
      image [set every repeat] = $probe_p3
      pos = (-.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_11
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    CodeComponent code_29
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
      End Routine:
        beginning_trial = globalClock.getTime();
        thisExp.addData("start", beginning_trial);
  Routine mng_test_sample2
    CodeComponent code_19
      Code Type = Py
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      Begin Experiment:
        incorr = 0
      Begin Routine:
        incorr = 1
        ClickCount1 = 0
        startTime = globalClock.getTime()
        end_trial = 0
        #beginning_trial = globalClock.getTime();

        clicked1 = 0
        clicked2 = 0
        clicked3 = 0
        clicked4 = 0
        clicked5 = 0
        clicked6 = 0
        clicked6 = 0
        clicked7 = 0
        clicked8 = 0
        lineColor = 'white'
        msg = 'Incorrect'

        P1T_rectangle_color = 0
        P2T_rectangle_color = 0
        P3T_rectangle_color = 0
        P4T_rectangle_color = 0
        P5T_rectangle_color = 0
        P6T_rectangle_color = 0
        P7T_rectangle_color = 0
        P8T_rectangle_color = 0
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
        #print(ClickCount1)

        if mouse_15.isPressedIn(P2T_rectangle_2t_sample):
            if clicked2 == 0:
                clicked2 = 1
                if lineColor == 'white':
                    P2T_rectangle_2t_sample.lineColor = 'black'
                    lineColor = 'black'
                    thisExp.addData('P2T_rectangle', 1) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 1
                elif lineColor == 'black':
                    P2T_rectangle_2t_sample.lineColor = 'white'
                    lineColor = 'white'
                    thisExp.addData('P2T_rectangle', 0) #OR exp.addData('letter', letter)
                    P2T_rectangle_color = 0
        elif clicked2 == 1:
            clicked2 = 0

        if mouse_15.isPressedIn(P3T_rectangle_2t_sample):
            if clicked3 == 0:
                clicked3 = 1
                if lineColor == 'white':
                    P3T_rectangle_2t_sample.lineColor = 'black'
                    lineColor = 'black'
                    P3T_rectangle_color = 1
                    thisExp.addData('P3T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P3T_rectangle_2t_sample.lineColor = 'white'
                    lineColor = 'white'
                    P3T_rectangle_color = 0
                    thisExp.addData('P3T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked3 == 1:
            clicked3 = 0

        if mouse_15.isPressedIn(P6T_rectangle_2t_sample):
            if clicked6 == 0:
                clicked6 = 1
                if lineColor == 'white':
                    P6T_rectangle_2t_sample.lineColor = 'black'
                    lineColor = 'black'
                    P6T_rectangle_color = 1
                    thisExp.addData('P6T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P6T_rectangle_2t_sample.lineColor = 'white'
                    lineColor = 'white'
                    P6T_rectangle_color = 0
                    thisExp.addData('P6T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked6 == 1:
            clicked6 = 0

        if mouse_15.isPressedIn(P7T_rectangle_2t_sample):
            if clicked7 == 0:
                clicked7 = 1
                if lineColor == 'white':
                    P7T_rectangle_2t_sample.lineColor = 'black'
                    lineColor = 'black'
                    P7T_rectangle_color = 1
                    thisExp.addData('P7T_rectangle', 1) #OR exp.addData('letter', letter)
                elif lineColor == 'black':
                    P7T_rectangle_2t_sample.lineColor = 'white'
                    lineColor = 'white'
                    P7T_rectangle_color = 0
                    thisExp.addData('P7T_rectangle', 0) #OR exp.addData('letter', letter)
        elif clicked7 == 1:
            clicked7 = 0

        if mouse_15.isPressedIn(finish_15):
            continueRoutine = False
            end_trial = globalClock.getTime();
            thisExp.addData("end", end_trial);
            time_exp = (end_trial - beginning_trial)
            thisExp.addData("rt", time_exp);
        else:
            time_exp = 0;
            thisExp.addData("rt", time_exp);
      End Routine:
        #print(ClickCount1)
        ClickCount1 = 0

        P2T_rectangle_2t_sample.lineColor = 'white'
        P3T_rectangle_2t_sample.lineColor = 'white'
        P6T_rectangle_2t_sample.lineColor = 'white'
        P7T_rectangle_2t_sample.lineColor = 'white'


        print("finish")
        print(float(P2T_rectangle_color))
        print(float(corr_p2))

        if ((float(corr_p2) == float(P2T_rectangle_color)) & (float(corr_p3) == float(P3T_rectangle_color)) & (float(corr_p6) == float(P6T_rectangle_color)) & (float(corr_p7) == float(P7T_rectangle_color))):
            mng_practice2.addData('accuracy', 1) #OR exp.addData('letter', letter)
            msg = "Correct"
            feedback_outcome_sound = feedback_sound[0]
            feedback_outcome_image = feedback_image[0]
            incorr = 0
        else:
            msg = "Incorrect"
            feedback_outcome_sound = feedback_sound[1]
            feedback_outcome_image = feedback_image[1]
            incorr = 1
            mng_practice2.addData('accuracy', 0) #OR exp.addData('letter', letter)
            print("value incorr")
            print(incorr)


        #end_trial = globalClock.getTime();
        #time_exp = (end_trial - beginning_trial)
        #thisExp.addData("rt", time_exp);

        if meanb1 < acc_thr:
                continueRoutine=False
                thisExp.addData("presented", 0)
        else:
            thisExp.addData("presented", 1)
    MouseComponent mouse_15
      clickable = P2T_rectangle_1t_3, P3T_rectangle_1t_3, P6T_rectangle_1t_3, P7T_rectangle_1t_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent P2T_rectangle_2t_sample
      fillColor = white
      pos = (0.125, 0)
      shape = rectangle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    PolygonComponent P3T_rectangle_2t_sample
      fillColor = white
      pos = (-0.125, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P6T_rectangle_2t_sample
      fillColor = white
      pos = (0.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent P7T_rectangle_2t_sample
      fillColor = white
      pos = (-.375, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P1T_1t_14
      image [set every repeat] = $test_p1
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    ImageComponent P2T_1t_14
      image [set every repeat] = $test_p2
      pos = (0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P3T_1t_14
      image [set every repeat] = $test_p3
      pos = (-0.125, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P4T_1t_14
      image [set every repeat] = $test_p4
      pos = (.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P5T_1t_14
      image [set every repeat] = $test_p5
      pos = (-.250, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P6T_1t_14
      image [set every repeat] = $test_p6
      pos = (0.375, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent P7t_1t_14
      image [set every repeat] = $test_p7
      pos = (-.375, 0)
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
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    SoundComponent sound_21
      disabled = True
      sound = What Pics.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent finish_15
      fillColor = white
      lineColor = black
      lineWidth = 4
      ori = 90
      pos = (0.625, -.35)
      shape = triangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent text_21
      color = black
      disabled = True
      letterHeight = 0.025
      pos = (0.623, -.35)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine mng_instructions2
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, we are going to see more pictures.
        Let's practice!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_27
      Code Type = Py
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      Begin Routine:
        corr_block_t1_o2 = int(mng_exptrials_t1.data['accuracy_t1_o2'].sum())
        print(corr_block_t1_o2)
        corr_block_t1_o3 = int(mng_exptrials_t1.data['accuracy_t1_o3'].sum())
        print(corr_block_t1_o3)
        corr_block_t1_o4 = int(mng_exptrials_t1.data['accuracy_t1_o4'].sum())
        print(corr_block_t1_o4)
        corr_block_t1_o5 = int(mng_exptrials_t1.data['accuracy_t1_o5'].sum())
        print(corr_block_t1_o5)

        meanb1 = int(((corr_block_t1_o2 +corr_block_t1_o3  + corr_block_t1_o4 + corr_block_t1_o5)/9)*100)
        print(meanb1)
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
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  Routine mng_ready
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Ready?
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Experiment:
        acc_thr = 66
  Routine mng_check_practice_2
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        ncount2 = ncount2 + 1

        if ncount2 == 1:
            nCorr2_loop1 = int(mng_practice2.data['accuracy'].mean()*100)
            print(nCorr2_loop1)
            if nCorr2_loop1 ==100:
                mng_practice2_loop.finished=1

        if ncount2 == 2:
            nCorr2_loop2 = int(mng_practice2.data['accuracy'].mean()*100)
            nCorr2_loop2 = nCorr2_loop2-nCorr2_loop1
            if nCorr2_loop2 == 100:
                mng_practice2_loop.finished=1
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
  Routine mng_repeat_instructions_2
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        if ncount2 == 1:
            if nCorr2_loop1 == 100:
                continueRoutine=False

        if ncount2 == 2:
            if nCorr2_loop2 == 100:
                continueRoutine=False
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
    TextComponent text_25
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember!
        Point to the pictures you just saw.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mng_practice_counter_2
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        ncount2 = 0

        if meanb1 < acc_thr:
                mng_practice2_loop.finished=1
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
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  Routine mng_blank_b2
    TextComponent blank_box_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_35
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
  Routine mng_blank_sample2
    TextComponent blank_box_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_36
      Code Type = Auto->JS
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      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
  Routine mng_blank_3
    TextComponent blank_box_4
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_37
      Code Type = Py
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      Begin Routine:
        corr_block_t2_o4 = int(mng_exptrials_t2.data['accuracy_t2_o4'].sum())
        corr_block_t2_o5 = int(mng_exptrials_t2.data['accuracy_t2_o5'].sum())
        corr_block_t2_o6 = int(mng_exptrials_t2.data['accuracy_t2_o6'].sum())

        meanb2 = (((corr_block_t2_o4 + corr_block_t2_o5  + corr_block_t2_o6)/9)*100)
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False
  Routine mng_blank_4
    TextComponent blank_box_5
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_38
      Code Type = Py
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      Begin Routine:
        corr_block_t3_o5 = int(mng_exptrials_t3.data['accuracy_t3_o5'].sum())
        corr_block_t3_o6 = int(mng_exptrials_t3.data['accuracy_t3_o6'].sum())
        corr_block_t3_o8 = int(mng_exptrials_t3.data['accuracy_t3_o8'].sum())

        meanb3 = (((corr_block_t3_o5 + corr_block_t3_o6  + corr_block_t3_o8)/10)*100)
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False

        if meanb2 < acc_thr:
                continueRoutine=False

        if meanb3 < acc_thr:
                continueRoutine=False
  Routine mng_ready_3
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_26
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Ready?
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    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Experiment:
        acc_thr = 66
      Each Frame:
        if meanb1 < acc_thr:
                continueRoutine=False
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  Routine mng_feedback_practice_2
    TextComponent text_28
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_sound = ['kids_cheering.wav','crowdohh.wav']
        feedback_image = ['happy.png','sad.png']
    SoundComponent sound_24
      disabled = True
      sound [set every repeat] = $feedback_outcome_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image
      image [set every repeat] = $feedback_outcome_image
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine mng_welcome
  Routine mng_instructions
  LoopInitiator mng_practice_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine mng_practice_counter
    LoopInitiator mng_practice loopType="TrialHandler"
      Selected rows = 0:1
      conditionsFile = mn_generaltask_practice.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('list', 1), ('item', 'item01'), ('probe_p1', 'colored PNG/PICTURE_3.png'), ('probe_p2', 'colored PNG/PICTURE_23.png'), ('probe_p3', None), ('probe_p4', None), ('test_p1', 'colored PNG/PICTURE_35.png'), ('test_p2', 'colored PNG/PICTURE_23.png'), ('test_p3', 'colored PNG/PICTURE_64.png'), ('test_p4', 'colored PNG/PICTURE_3.png'), ('test_p5', 'colored PNG/PICTURE_67.png'), ('test_p6', 'colored PNG/PICTURE_69.png'), ('clicks', 2), ('corr_p1', 0), ('corr_p2', 1), ('corr_p3', 0), ('corr_p4', 1), ('corr_p5', 0), ('corr_p6', 0)]),
        OrderedDict([('list', 2), ('item', 'item02'), ('probe_p1', 'colored PNG/PICTURE_78.png'), ('probe_p2', 'colored PNG/PICTURE_90.png'), ('probe_p3', None), ('probe_p4', None), ('test_p1', 'colored PNG/PICTURE_90.png'), ('test_p2', 'colored PNG/PICTURE_122.png'), ('test_p3', 'colored PNG/PICTURE_100.png'), ('test_p4', 'colored PNG/PICTURE_91.png'), ('test_p5', 'colored PNG/PICTURE_78.png'), ('test_p6', 'colored PNG/PICTURE_165.png'), ('clicks', 2), ('corr_p1', 1), ('corr_p2', 0), ('corr_p3', 0), ('corr_p4', 0), ('corr_p5', 1), ('corr_p6', 0)]),
        OrderedDict([('list', 3), ('item', 'item03'), ('probe_p1', 'colored PNG/PICTURE_189.png'), ('probe_p2', 'colored PNG/PICTURE_190.png'), ('probe_p3', 'colored PNG/PICTURE_203.png'), ('probe_p4', 'colored PNG/PICTURE_238.png'), ('test_p1', 'colored PNG/PICTURE_203.png'), ('test_p2', 'colored PNG/PICTURE_268.png'), ('test_p3', 'colored PNG/PICTURE_238.png'), ('test_p4', 'colored PNG/PICTURE_264.png'), ('test_p5', 'colored PNG/PICTURE_190.png'), ('test_p6', 'colored PNG/PICTURE_189.png'), ('clicks', 4), ('corr_p1', 1), ('corr_p2', 0), ('corr_p3', 1), ('corr_p4', 0), ('corr_p5', 1), ('corr_p6', 1)]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,
        OrderedDict([('list', 4), ('item', 'item04'), ('probe_p1', 'colored PNG/PICTURE_285.png'), ('probe_p2', 'colored PNG/PICTURE_309.png'), ('probe_p3', 'colored PNG/PICTURE_324.png'), ('probe_p4', 'colored PNG/PICTURE_353.png'), ('test_p1', 'colored PNG/PICTURE_324.png'), ('test_p2', 'colored PNG/PICTURE_309.png'), ('test_p3', 'colored PNG/PICTURE_360.png'), ('test_p4', 'colored PNG/PICTURE_353.png'), ('test_p5', 'colored PNG/PICTURE_358.png'), ('test_p6', 'colored PNG/PICTURE_285.png'), ('clicks', 4), ('corr_p1', 1), ('corr_p2', 1), ('corr_p3', 0), ('corr_p4', 1), ('corr_p5', 0), ('corr_p6', 1)]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
      Routine mng_blank
      Routine mng_probe_sample
      Routine mng_test_sample
      Routine mng_feedback_practice_2
    LoopTerminator mng_practice
    Routine mng_check_practice
    Routine mng_repeat_instructions
  LoopTerminator mng_practice_loop
  Routine mng_ready
  LoopInitiator mng_exptrials_t1 loopType="TrialHandler"
    conditionsFile = mn_generaltask_t1trials_good.csv
    loopType = sequential
    nReps = 1
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    Routine mng_blank
    Routine mng_probe_1target
    Routine mng_test_1target_2objects
    Routine mng_test_1target_3objects
    Routine mng_test_1target_4objects
    Routine mng_test_1target_5objects
  LoopTerminator mng_exptrials_t1
  Routine mng_instructions2
  LoopInitiator mng_practice2_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine mng_practice_counter_2
    LoopInitiator mng_practice2 loopType="TrialHandler"
      conditions = [{'list': 1, 'item': 'sample2', 'probe_p1': None, 'probe_p2': 'colored PNG/PICTURE_122.png', 'probe_p3': 'colored PNG/PICTURE_268.png', 'probe_p4': None, 'test_p1': None, 'test_p2': 'colored PNG/PICTURE_122.png', 'test_p3': 'colored PNG/PICTURE_446.png', 'test_p4': None, 'test_p5': None, 'test_p6': 'colored PNG/PICTURE_268.png', 'test_p7': 'colored PNG/PICTURE_324.png', 'clicks': None, 'corr_p1': 0, 'corr_p2': 1, 'corr_p3': 0, 'corr_p4': 0, 'corr_p5': 0, 'corr_p6': 1, 'corr_p7': 0}]
      conditionsFile = mn_generaltask_practice2.xlsx
      loopType = sequential
      nReps = 1
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      Routine mng_blank_sample2
      Routine mng_probe_sample2
      Routine mng_test_sample2
      Routine mng_feedback_practice
    LoopTerminator mng_practice2
    Routine mng_check_practice_2
    Routine mng_repeat_instructions_2
  LoopTerminator mng_practice2_loop
  Routine mng_ready_3
  LoopInitiator mng_exptrials_t2 loopType="TrialHandler"
    conditionsFile = mn_generaltask_t2trials_final.xlsx
    loopType = sequential
    nReps = 1
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    Routine mng_blank_b2
    Routine mng_probe_2target
    Routine mng_test_2target_4objects
    Routine mng_test_2target_5objects
    Routine mng_test_2target_6objects
  LoopTerminator mng_exptrials_t2
  LoopInitiator mng_exptrials_t3 loopType="TrialHandler"
    conditionsFile = mn_generaltask_t3trials_final.xlsx
    loopType = sequential
    nReps = 1
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    Routine mng_blank_3
    Routine mng_probe_3target
    Routine mng_test_3target_5objects
    Routine mng_test_3target_6objects
    Routine mng_test_3target_8objects
  LoopTerminator mng_exptrials_t3
  LoopInitiator mng_exptrials_t4 loopType="TrialHandler"
    conditionsFile = mn_generaltask_t4trials_final.xlsx
    loopType = sequential
    nReps = 1
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    Routine mng_blank_4
    Routine mng_probe_4target
    Routine mng_test_4target_6objects
    Routine mng_test_4target_8objects
    Routine mng_test_4target_10objects
  LoopTerminator mng_exptrials_t4
  Routine mng_end
